OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.3.0)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "1:3"
  Channel List = 1:3
  Action = Select
  Channel Matching Method = Smart
-> Temporal Filter
  Filter Type = Band Stop
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 59
  High Cut-off Frequency (Hz) = 61
-> Temporal Filter => #3
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 13
  Low Cut-off Frequency 2 (Hz) = 8
  High Cut-off Frequency 2 (Hz) = 13
#3.Output signal -> Channel Selector "1" => #4
  Channel List = 1
  Action = Select
  Channel Matching Method = Smart
-> Time based epoching
  Epoch duration (in sec) = 5
  Epoch intervals (in sec) = 2.5
-> Signal average
-> Simple DSP => #7
  Equation = x*x
Data=#4 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input stream=#4 -> CSV File Writer
  Filename = C:/Users/jorge/Documents/Tec/Uni/6. Sexto Semestre/EEG_Luzma/Reto/channel_1-[$core{date}-$core{time}].csv
  Precision = 10
  Append data = false
  Only last matrix = false
#3.Output signal 2 -> Channel Selector "3" => #10
  Channel List = 3
  Action = Select
  Channel Matching Method = Smart
-> Time based epoching
  Epoch duration (in sec) = 5
  Epoch intervals (in sec) = 2.5
-> Signal average
-> Simple DSP => #13
  Equation = x*x
A=#7, B=#13 -> Simple DSP => #14
  Equation = log(B)-log(A)
Input signal=#14 -> LSL Export
  Signal stream = openvibeSignal
  Marker stream = openvibeMarkers
Data=#14 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input stream=#14 -> CSV File Writer
  Filename = C:/Users/jorge/Documents/Tec/Uni/6. Sexto Semestre/EEG_Luzma/Reto/csvsignal_display-[$core{date}-$core{time}].csv
  Precision = 10
  Append data = false
  Only last matrix = false
Data=#10 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input stream=#10 -> CSV File Writer
  Filename = C:/Users/jorge/Documents/Tec/Uni/6. Sexto Semestre/EEG_Luzma/Reto/channel_2-[$core{date}-$core{time}].csv
  Precision = 10
  Append data = false
  Only last matrix = false

Lua Stimulator => #20
  Lua Script = C:/Users/jorge/Documents/Tec/Uni/6. Sexto Semestre/EEG_Luzma/Reto/display_texto.lua
-> Display cue image
  Display images in full screen = true
  Scale images to fit = true
  Clear screen Stimulation = OVTK_StimulationId_Label_04
  Cue Image 1 = C:/Users/jorge/Documents/Tec/Uni/6. Sexto Semestre/EEG_Luzma/Reto/imagenes/label_00_ojos_cerrados.png
  Stimulation 1 = OVTK_StimulationId_Label_00
  Cue Image 2 = C:/Users/jorge/Documents/Tec/Uni/6. Sexto Semestre/EEG_Luzma/Reto/imagenes/label_01_ojos_abiertos.png
  Stimulation 2 = OVTK_StimulationId_Label_01
  Cue Image 3 = C:/Users/jorge/Documents/Tec/Uni/6. Sexto Semestre/EEG_Luzma/Reto/imagenes/label_02_texto_med.jpeg
  Stimulation 3 = OVTK_StimulationId_Label_02
  Cue Image 4 = C:/Users/jorge/Documents/Tec/Uni/6. Sexto Semestre/EEG_Luzma/Reto/imagenes/label_03_explicacion.png
  Stimulation 4 = OVTK_StimulationId_Label_03
#20 -> Player Controller
  Stimulation name = OVTK_StimulationId_Label_03
  Action to perform = Forward
